PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = face_recognition_ERP_protocol
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $stimulus_time
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine WelcomeScreen
    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Welcome!
  Routine InstructionsScreen
    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Pay attention to the images with minimal head movements if possible.

        Mentally count each instance of an image of Kelly from the Office.

        Press SPACEBAR when you are ready.
    KeyboardComponent spacebar_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blankScreen
    TextComponent blank_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine trialBlockScreen
    TextComponent trialBlockText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = When you are ready to start a new trial block, press the SPACEBAR!
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    KeyboardComponent new_trialblock
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GoodbyeScreen
    TextComponent goodbye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you for participating!
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  Routine eyeScreen
    TextComponent eye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Blink you eyes
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  Routine jawClenching
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Clench your jaw!
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  Routine closedEyes
    TextComponent closedEyes_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Close your eyes and open them when you hear the beep.
    SoundComponent beep
      sound = A
      startVal [time (s)] = 15
      stopVal [duration (s)] = 0.5
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Flow
  Routine WelcomeScreen
  Routine InstructionsScreen
  Routine eyeScreen
  Routine jawClenching
  Routine closedEyes
  LoopInitiator trial_block loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 3
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = stims.xlsx
      loopType = random
      nReps = 3
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      conditions:
        [{'StimulusTime': 'Dataset/httpabsolumentgratuitfreefrimagesbenaffleckjpg.jpg'},
        {'StimulusTime': 'Dataset/httpafilesbiographycomimageuploadcfillcssrgbdprgfacehqwMTENDgMDUODczNDcNTcjpg.jpg'},
        {'StimulusTime': 'Dataset/httpafilesbiographycomimageuploadcfillcssrgbdprgfacehqwMTEODAOTcxNjcMjczMjkzjpg.jpg'},
        {'StimulusTime': 'Dataset/httpafilesbiographycomimageuploadcfillcssrgbdprgfacehqwMTIOTcwODQNTUzNjQMzcjpg.jpg'},
        {'StimulusTime': 'Dataset/httpafilesbiographycomimageuploadcfillcssrgbdprgfacehqwMTIwNjANjMMDINzIxNjcjpg.jpg'},
        {'StimulusTime': 'Dataset/httpassetsrollingstonecomassetsarticlemadonnadavidbowiechangedthecourseofmylifeforeversmallsquarexmadonnabowiejpg.jpg'},
        {'StimulusTime': 'Dataset/httpassetsrollingstonecomassetsimagesalbumreviewaffaceabdcccaeedjpg.jpg'},
        {'StimulusTime': 'Dataset/httpaurorasblogcomwpcontentuploadsjerryseinfeldpublicityshotjpg.jpg'},
        {'StimulusTime': 'Dataset/httpblognjcomentertainmentimpactcelebritiesmediumjerrybjpg.jpg'},
        {'StimulusTime': 'Dataset/httpbpblogspotcomedLMjVpRGkSWexgsXjkNIAAAAAAAADWgFFtAUqBlhAsjpg.jpg'},
        {'StimulusTime': 'Dataset/httpcdncdnjustjaredcomwpcontentuploadsheadlineseltonjohnemmysperformancewatchnowjpg.jpg'},
        {'StimulusTime': 'Dataset/httpcdncdnjustjaredcomwpcontentuploadsheadlineseltonjohnstillstandingbrooklynnewyearsjpg.jpg'},
        {'StimulusTime': 'Dataset/httpcdncdnjustjaredcomwpcontentuploadsheadlineseltonjohnsupportsbrucejennerstransitiontowomanjpg.jpg'}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
      Routine blankScreen
      Routine trial
    LoopTerminator trials
    Routine trialBlockScreen
  LoopTerminator trial_block
  Routine GoodbyeScreen
